PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 2560]
  expName = HRD_fMRI
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Routines
  Routine Decision
    MouseComponent mouse
      durationEstim = 5
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      timeRelativeTo = routine
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    SoundComponent sound_1
      sound [set every repeat] = $file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent textDecision
      durationEstim = 5.0
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Do you think the tone frequency was higher or lower than your heart rate?

        Lower (Left button) - Higher (Right button)
    ImageComponent image
      image = Images/listenResponse.png
      pos = (0, -0.2)
      size = (0.39609375, 0.16111111)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent code_8
      Code Type = Py
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      Begin Routine:
        colorLess, colorMore = 'white', 'white'
    CodeComponent code_6
      Code Type = Py
      End Routine:
        # Is the answer Correct? Update the staircase model
        if estimation is not None:
            if (estimation == 'More') & (alpha > 0):
                stairCaseIntero.addResponse(1)
                accuracy = 1
            elif (estimation == 'Less') & (alpha < 0):
                stairCaseIntero.addResponse(1)
                accuracy = 1
            else:
                stairCaseIntero.addResponse(0)
                accuracy = 0
            nRepsRatingScale = 1
            nRepsFeeback = 0
            correct = ['True' if accuracy==1 else 'False']
            print(f'Initial BPM: {average_hr} - Staircase value: {alpha} - Response: {estimation} ({correct}) - Condition: {condition}')
        else:
            nRepsRatingScale = 0
            nRepsFeeback = 1
            print('No response provided')
    TextComponent text_Less
      color [set every frame] = $colorLess
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Less
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    TextComponent text_More
      color [set every frame] = $colorMore
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = More
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        estimation = None
      Each Frame:
        if mouse.leftButton == [1]:
            estimation = 'Less'
            colorLess = 'blue'
        elif mouse.rightButton == [1]:
            estimation = 'More'
            colorMore = 'blue'
  Routine fixCross
    PolygonComponent fiCross1
      durationEstim = 1
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        jitter = np.arange(0, 2, .1)
        shuffle(jitter)

        if condition == 'Intero':
            nRepsIntero = 5
            nRepsExtero = 0
        elif condition == 'Extero':
            nRepsIntero = 0
            nRepsExtero = 1
    CodeComponent code_5
      Code Type = Py
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      Begin Experiment:
        stairCaseIntero = data.PsiHandler(
            nTrials=100,
            intensRange=[1, 40], alphaRange=[1, 20],
            betaRange=[0.1, 4], intensPrecision=1,
            alphaPrecision=1, betaPrecision=0.01,
            delta=0.1, stepType='lin', expectedMin=0.5)

        stairCaseExtero = data.PsiHandler(
            nTrials=100,
            intensRange=[1, 40], alphaRange=[1, 20],
            betaRange=[0.1, 4], intensPrecision=1,
            alphaPrecision=1, betaPrecision=0.01,
            delta=0.1, stepType='lin', expectedMin=0.5)
  Routine fixCross2
    PolygonComponent fiCross2
      durationEstim = 1
      fillColor = $[1,1,1]
      shape = cross
      size = (0.1, 0.1)
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter[0]
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    CodeComponent code_3
      Code Type = Py
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      Begin Routine:
        jitter = np.arange(0, 2, .1)
        shuffle(jitter)
  Routine endScreen
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for participating

        Please wait for the next instruction
  Routine getTrigger
    KeyboardComponent key_resp
      allowedKeys = '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Waiting for trigger
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  Routine feedback
    TextComponent text_Less_2
      color [set every repeat] = $colorLess
      letterHeight = 0.1
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = Less
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    TextComponent text_More_2
      color [set every repeat] = $colorMore
      letterHeight = 0.1
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = More
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  Routine RatingScale
    RatingScaleComponent rating
      categoryChoices = Not confident at all, Highly confident
      disappear = True
      durationEstim = 3
      forceEndRoutine = True
      high = 100
      low = 1
      pos = 0, -0.4
      scaleDescription = How confident are you about your judgment.
      singleClick = True
      size = 1.0
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 3.0
      storeHistory = True
      visualAnalogScale = True
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    CodeComponent code_9
      Code Type = Py
      End Experiment:
        stairCaseIntero.saveAsExcel(expInfo['participant'])
        stairCaseIntero.saveAsPickle(expInfo['participant'])

        stairCaseExtero.saveAsExcel(expInfo['participant'])
        stairCaseExtero.saveAsPickle(expInfo['participant'])
      End Routine:
        thisExp.addData('accuracy', accuracy)
        thisExp.addData('AverageHR', average_hr)
  Routine Intero
    ImageComponent Listen
      image = Images/heartbeat.png
      pos = (0, -0.2)
      size = (0.18480903, 0.15169271)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    TextComponent textListen
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Listen to your Heart
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    CodeComponent code_4
      Code Type = Py
      End Routine:
        # Read ExG
        #recording = BrainVisionExG(ip='10.60.88.162').read(5)
        #segment = np.array(recording['PLETH'])
        #signal, peaks = oxi_peaks(segment, sfreq=parameters['sfreq'],
        #                          clipping=False)
        # Get actual heart Rate
        #average_hr = int((60000/np.diff(np.where(peaks)[0])).mean())

        average_hr = 60

        if average_hr < 30:
            trials_2.finished = 1
            nRepsFeedbackBPM = 0

            alpha = stairCaseIntero.next()

            # Check for extreme HR values, e.g. if HR changes massively from
            # trial to trial.
            if (average_hr + alpha) < 15:
                hr = '15'
            elif (average_hr + alpha) > 199:
                hr = '199'
            else:
                hr = str(int(average_hr + alpha))

            file = os.path.join(os.getcwd(), 'sounds', hr + '.wav')
        else:
            nRepsFeedbackBPM = 1
  Routine Extero
    TextComponent text_3
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Listen to the tones
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    ImageComponent image_2
      image = Images/Listen.png
      pos = (0, -0.2)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        alpha = stairCaseExtero.next()

        # Random selection of HR frequency
        average_hr = np.random.choice(np.arange(40, 100))
        hr = str(int(average_hr + alpha))

        file = os.path.join(os.getcwd(), 'sounds', hr + '.wav')
    SoundComponent sound_2
      sound [set every repeat] = $file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Feedback
    TextComponent text_4
      color = red
      durationEstim = 2.0
      letterHeight = 0.1
      startEstim = 0.0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Too late
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  Routine Feedback2
    TextComponent text_5
      color = red
      durationEstim = 1
      letterHeight = 0.1
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please stay still during the recording
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  Routine Feedback_2
    TextComponent text_6
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Pleqse stay still during the recording
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  Routine Feedback2_2
    TextComponent text_7
      color = red
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Please stay still during the recording
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Flow
  Routine getTrigger
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Condition', 'Intero')]),
      OrderedDict([('Condition', 'Extero')])]
    Routine fixCross
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = nRepsIntero
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      Routine Intero
      LoopInitiator trials_6 loopType="TrialHandler"
        loopType = random
        nReps = nRepsFeedbackBPM
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        Routine Feedback2_2
      LoopTerminator trials_6
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = nRepsExtero
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      Routine Extero
    LoopTerminator trials_3
    Routine fixCross2
    Routine Decision
    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = nRepsRatingScale
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      Routine RatingScale
    LoopTerminator trials_5
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = nRepsFeeback
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      Routine Feedback
    LoopTerminator trials_4
  LoopTerminator trials
  Routine endScreen
